PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = ARExperiment1
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Routines
  Routine fixation
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intro
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Welcome to the experiment!
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  Routine Trial
  Routine End
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        This is the end of the experiment

        Thank you for your participation!
Flow
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine fixation
    Routine Trial
  LoopTerminator trials
  Routine End
